<?xml version="1.0" encoding="utf-8" ?>
<Feature SiLA2Version="0.1" FeatureVersion="1.0" Originator="com.madisoft" Category="reader"
        xmlns="http://www.sila-standard.org"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
        xsi:schemaLocation="http://www.sila-standard.org https://gitlab.com/SiLA2/sila_features/raw/master/schema/FeatureDefinition.xsd">
    <Identifier>LuminescenceReaderService</Identifier>
    <DisplayName>Luminescence Reader Service</DisplayName>
    <Description>SiLA 2 Device Luminescence Reader feature - Show basic operations for a device luminescence reader
        like open/close device cover, abort read operations, reading from selected well of a plate and reading from all wells in a plate.
        There are several types of plates with 6, 12, 24, 48, 96 and 384 wells. Observing current status of the reader: idle, busy, unavailable.
        Luminescence reading has an integration property from 0.1 to 10 seconds.
    </Description>
    <!-- Commands -->
    <Command>
        <Identifier>LuminescenceReadWell</Identifier>
        <DisplayName>Luminescence Read Well</DisplayName>
        <Description>Read and present data from one target well</Description>
        <Observable>No</Observable>
        <Parameter>
            <Identifier>TargetWell</Identifier>
            <DisplayName>Target Well</DisplayName>
            <Description>Address of the target well on the plate which the reader will try to find, reach
                and will try to read the well data.
            </Description>
            <DataType>
                <DataTypeIdentifier>WellAddress</DataTypeIdentifier>
            </DataType>
        </Parameter>
        <Response>
            <Identifier>Value</Identifier>
            <DisplayName>Value</DisplayName>
            <Description>Result value of the well</Description>
            <DataType>
                <!-- TODO: Unit of measurement -->
                <Basic>Integer</Basic>
            </DataType>
        </Response>
    </Command>
    <Command>
        <Identifier>LuminescenceReadPlate</Identifier>
        <DisplayName>Luminescence Read Plate</DisplayName>
        <Description>Go through every plate well and read its result</Description>
        <Observable>Yes</Observable>
            <Response>
            <Identifier>ResultList</Identifier>
            <DisplayName>Result List Values</DisplayName>
            <Description>Result list of values of every well</Description>
            <DataType>
                <List>
                    <DataType>
                        <Structure>
                            <Element>
                                <Identifier>WellAddress</Identifier>
                                <DisplayName>WellAddress</DisplayName>
                                <Description />
                                <DataType>
                                    <DataTypeIdentifier>WellAddress</DataTypeIdentifier>
                                </DataType>
                            </Element>
                            <Element>
                                <Identifier>Value</Identifier>
                                <DisplayName>Value</DisplayName>
                                <Description>The read luminescence value in this well</Description>
                                <DataType>
                                    <!-- TODO: Unit of measurement -->
                                    <Basic>Integer</Basic>
                                </DataType>
                            </Element>
                        </Structure>
                    </DataType>
                </List>
            </DataType>
        </Response>
    </Command>
    <!-- Properties -->
    <Property>
        <Identifier>Integration</Identifier>
        <DisplayName>Integration</DisplayName>
        <Description>Integration time filter for Luminescence read.</Description>
        <DataType>
            <Constrained>
                <DataType>
                    <Basic>Real</Basic>
                </DataType>
                <Constraints>
                    <Unit>
                        <Label>Second</Label>
                        <UnitComponent>
                            <SIUnit>Second</SIUnit>
                            <Exponent>1</Exponent>
                            <Factor>1</Factor>
                            <Offset>0</Offset>
                        </UnitComponent>
                    </Unit>
                    <MinimalInclusive>0.1</MinimalInclusive>
                    <MaximalInclusive>10.0</MaximalInclusive>
                </Constraints>
            </Constrained>
        </DataType>
        <Observable>No</Observable>
    </Property>
    <!-- DataTypeDefinitions -->
    <DataTypeDefinition>
        <Identifier>WellAddress</Identifier>
        <DisplayName>Well Address</DisplayName>
        <Description>Well address on the plate which the reader will try to find, reach and will try to read the well data.
            The plate is like a matrix of wells and every well has addess which is unique and consists of two parts:
            1. First part is a letter from A to Z and shows the well row of the matrix
            2. Second part is a positive number 1, 2, 3, ... which shows the column of the plate matrix
            Example: A1, A2, ..., B1, B2, ...
            This property defines the first part of the well address.
        </Description>
        <DataType>
            <Structure>
                <Element>
                    <Identifier>Row</Identifier>
                    <DisplayName>Row</DisplayName>
                    <Description>Row of the well address A, B, C, ...</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>String</Basic>
                            </DataType>
                            <Constraints>
                                <Length>1</Length>
                                <Pattern>[A-Z]</Pattern>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
                <Element>
                    <Identifier>Column</Identifier>
                    <DisplayName>Column</DisplayName>
                    <Description>Column of the well address 1, 2, 3, ...</Description>
                    <DataType>
                        <Constrained>
                            <DataType>
                                <Basic>Integer</Basic>
                            </DataType>
                            <Constraints>
                                <Pattern>[0-9]</Pattern>
                            </Constraints>
                        </Constrained>
                    </DataType>
                </Element>
            </Structure>
        </DataType>
    </DataTypeDefinition>
</Feature>